schema_version: 0.0.3
sequence_version: 0.1.0
title: 15N-CEST
description: 15N chemical exchange saturation transfer (CEST) experiment
  -based on Lakomek sensitivity-enhanced 15N T1 experiment
authors:
  - Bruker
created: 2026-06-03
last_modified: 2026-06-07
repository: github.com/waudbylab/pulseprograms
status: beta
features: [cest, 2d]
typical_nuclei: [1H, 15N]
dimensions: [f1, f2]
acquisition_order: [f1, f2]
reference_pulse: 
  - {channel: f1, duration: p1, power: pl1}
  - {channel: f3, duration: p21, power: pl3} 
cest:
  channel: f3
  duration: d18
  offset: N15sat
  power: pl18


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

;list of CEST saturation frequencies
;first line in file 'Hz sfo'
;second line in file should be zero, indicating the reference plane
;give values in Hz relative to sfo3
define list<frequency> N15sat = <$FQ3LIST>

;38 points in steps of 45 Hz:
;define list<frequency> N15sat = {0  -810.0 -765.0 -720.0 -675.0 -630.0 -585.0 -540.0 -495.0 -450.0 -405.0 -360.0 -315.0 -270.0 -225.0 -180.0 -135.0 -90.0 -45.0 0.0 45.0 90.0 135.0 180.0 225.0 270.0 315.0 360.0 405.0 450.0 495.0 540.0 585.0 630.0 675.0 720.0 765.0 810.0}
;define list<frequency> N15sat = {0 -1000 0}
;define list<frequency> N15sat = {0}


"in0=inf2*0.5"

"p2=p1*2"
"p22=p21*2"

"d0=10u"
"d11=30m"
"d26=p21-p1"
"DELTA=2.65m"
"DELTA1=2.65m"
"DELTA2=2.65m-200u"
"DELTA3=2.65m-200u"
"DELTA4=p24-p19*0.6366"
"DELTA5=2.65m-p25-200u"
"DELTA7=2.65m"

"l2=1" ; loop counter for saturation list
"l6=td1"
"l3=td2/2"
; used to identify first point as the reference spectrum,
; and to activate temperature compensation for this point

"DELTA6=30u+p2" ; for zero phase correction

;"cnst18=-800"
;"cnst19=8.2"


aqseq 312
"acqt0=0"


1 ze
  1m
2 2m do:f3
  1m LOCKH_OFF
  d11
3 3m
4 1m
5 1m do:f3
  10u UNBLKGRAD

;---------temperature compensation and d1 recovery delay---------

; apply temperature compensation for 1st point (reference with no spinlock)
if "l2==1"
{
    10u LOCKH_ON
    10u fq=cnst19(bf ppm):f1 ; put 1H on amides
    10u pl8:f1
    d18 cpds1:f1
    10u do:f1
    10u fq=0:f1 ; put 1H back on water
    10u LOCKH_OFF
}
; purge water before recycle delay
10u pl8:f1
2mp ph0
3mp ph1
10u pl1:f1
;10u pl1:f1
;(p1 ph0):f1
;5u
;p16:gp8
;200u
1m BLKGRAD

d1

1m UNBLKGRAD

;------- kill steady state 15N ------------
10u pl3:f3
(p21 ph0):f3
5u
p16:gp9
200u

;------- first INEPT Hz-> 2HxNz -------------------------
(p1 ph0):f1
5u
DELTA gron0 ; soft gradient to prevent radiation damping
5u  groff
(center (p2 ph0):f1 (p22 ph0):f3)
5u
DELTA gron0
5u groff

;------- rephase  2HxNz to Nz-----------------------------
(center (p1 ph5):f1  (p21 ph0):f3)
5u
DELTA1 gron1 ; soft gradient to prevent radiation damping
5u groff
(center (p2 ph0):f1 (p22 ph0):f3)
5u
DELTA1 gron1
5u groff
(center (p1 ph2):f1 (p21 ph6):f3) ; phase-cycle Nz, -Nz for Freeman-Hill decay
                                  ; purge pulse to kill any residual HzNz
;--------------------------------------------------------
5u
p16:gp6  ; cleaning gradient
200u

;------15N T1 relaxation period--------------------------
5u pl8:f1 pl18:f3

; water purge
2mp ph0
3mp ph1

if "l2==1" goto 77
5u LOCKH_ON
5u N15sat:f3
5u fq=cnst19(bf ppm):f1
d18 cpds1:f1 cw:f3 ph0
5u do:f1 do:f3
5u LOCKH_OFF
5u fq=0:f1
5u fq=0:f3
77 5u
5u

; water purge
2mp ph0
3mp ph1

5u pl1:f1 pl3:f3

5u
p16:gp7  ; cleaning gradient
200u
;goto 999
;---------- Echo-Antiecho encoding------------------------
(p21 ph7):f3
DELTA6 ;compensation for d0 15N evolution
DELTA5
190u
p25:gp5*EA ; 1ms
10u
(center (p2 ph0):f1 (p22 ph9):f3)
10u
p25:gp5*EA*-1 ; 1ms
190u
DELTA5

; t1 evolution ---------------------------------------------
d0*0.5 gron1
5u groff
d0*0.5 gron1*-1
5u groff
(p2 ph0):f1
d0
;--------Rance-Kay transfer back ----------------------------

(center (p1 ph0):f1 (p21 ph8):f3)
DELTA2 gron2
200u groff
(center(p2 ph0):f1 (p22 ph0):f3)
DELTA2 gron2
200u groff

; ---second INEPT ----------------------------------------
(center (p1 ph1):f1 (p21 ph1):f3)    ;DOUBLE 90
DELTA3 gron3
200u groff
(center(p2 ph0):f1 (p22 ph0):f3)
DELTA3 gron3
200u groff

d26*0.5 ;d26 = p21 - p1
(p19 ph0:r):f1 ; fine tune p19 for water suppression
245u
DELTA4
(p2 ph0):f1
5u
p24:gp4 ; 201u
200u

999  10u
10u pl31:f3
20u BLKGRAD

go=2 ph31 cpds3:f3
500u do:f3
d11 wr #0 if #0 zd

; loop over CEST frequencies
1m N15sat.inc
1m iu2
lo to 3 times l6

; Echo/Anti-echo
1m ip8*2
1m igrad EA
1m ru2
1m N15sat.res
lo to 4 times 2

; t1 evolution
1m id0
1m ip7*2
1m ip31*2
lo to 5 times l3

1m do:f3
1m BLKGRAD
exit

ph0= 0
ph1= 1          ;check right phase for Boltzmann !!!!!
ph2= 2
ph5= 1 1 1 1
ph6= 1 1 3 3
ph7= 1 3
ph8= 0
ph9= 1 3
ph31=1 3 3 1
